calculate_screen_boundaries();

trial_instruction.present();

create_block ("different_both", 0, 40);
present_block("group1;block1");

pause(30);

array<string> array_attention_block_group[6] = 
	{"different_both", "different_both",
	"different_targets", "different_targets",
	"different_non_targets", "different_non_targets"};

array_attention_block_group.shuffle();

loop int i = 1 until i > array_attention_block_group.count()
begin
	create_block(array_attention_block_group[i], 30, 10);
	present_block("group2;block"+ string(i));
	i = i + 1;
end;

pause(30);

create_block ("different_both", 40, 0);
present_block("group3;block1");

pause(180);

create_block ("different_both", 0, 40);
present_block("group4;block1");

pause(30);

array<string> array_inhibition_block_group[6] = 
	{"different_both", "different_both",
	"different_targets", "different_targets",
	"different_non_targets", "different_non_targets"};

array_inhibition_block_group.shuffle();

loop int i = 1 until i > array_inhibition_block_group.count()
begin
	create_block(array_inhibition_block_group[i], 10, 30);
	present_block("group5;block"+ string(i));
	i = i + 1;
end;

pause(30);

create_block ("different_both", 40, 0);
present_block("group6;block1");